<?xml version="1.0" encoding="utf-8"?>
<MethodSet>
  <PreMethod methodName="PTplus_START" creator="wzy" dateTime="2024-09-12T14:53:38.2803281+08:00">
    <TargetBlockTemperature>25</TargetBlockTemperature>
    <TargetLidTemp>110</TargetLidTemp>
  </PreMethod>
  <Method methodName="PTplus_RNA_denatration" creator="WSR" dateTime="2025-08-18T17:09:19.4880395+08:00">
    <Variant>960000</Variant>
    <PlateType>0</PlateType>
    <FluidQuantity>0</FluidQuantity>
    <PostHeating>true</PostHeating>
    <StartBlockTemperature>4</StartBlockTemperature>
    <StartLidTemperature>110</StartLidTemperature>
    <Step>
      <Number>1</Number>
      <Slope>4.4</Slope>
      <PlateauTemperature>70</PlateauTemperature>
      <PlateauTime>300</PlateauTime>
      <OverShootSlope1>4.4</OverShootSlope1>
      <OverShootTemperature>0</OverShootTemperature>
      <OverShootTime>0</OverShootTime>
      <OverShootSlope2>2.2</OverShootSlope2>
      <GotoNumber>0</GotoNumber>
      <LoopNumber>0</LoopNumber>
      <PIDNumber>1</PIDNumber>
      <LidTemp>110</LidTemp>
    </Step>
    <Step>
      <Number>2</Number>
      <Slope>2.2</Slope>
      <PlateauTemperature>60</PlateauTemperature>
      <PlateauTime>1</PlateauTime>
      <OverShootSlope1>0.1</OverShootSlope1>
      <OverShootTemperature>0</OverShootTemperature>
      <OverShootTime>0</OverShootTime>
      <OverShootSlope2>0.1</OverShootSlope2>
      <GotoNumber>0</GotoNumber>
      <LoopNumber>0</LoopNumber>
      <PIDNumber>1</PIDNumber>
      <LidTemp>110</LidTemp>
    </Step>
    <Step>
      <Number>3</Number>
      <Slope>1.4</Slope>
      <PlateauTemperature>40</PlateauTemperature>
      <PlateauTime>1</PlateauTime>
      <OverShootSlope1>1.4</OverShootSlope1>
      <OverShootTemperature>0</OverShootTemperature>
      <OverShootTime>0</OverShootTime>
      <OverShootSlope2>2.2</OverShootSlope2>
      <GotoNumber>0</GotoNumber>
      <LoopNumber>0</LoopNumber>
      <PIDNumber>1</PIDNumber>
      <LidTemp>110</LidTemp>
    </Step>
    <Step>
      <Number>4</Number>
      <Slope>0.8</Slope>
      <PlateauTemperature>20</PlateauTemperature>
      <PlateauTime>1</PlateauTime>
      <OverShootSlope1>0.1</OverShootSlope1>
      <OverShootTemperature>0</OverShootTemperature>
      <OverShootTime>0</OverShootTime>
      <OverShootSlope2>0.1</OverShootSlope2>
      <GotoNumber>0</GotoNumber>
      <LoopNumber>0</LoopNumber>
      <PIDNumber>1</PIDNumber>
      <LidTemp>110</LidTemp>
    </Step>
    <Step>
      <Number>5</Number>
      <Slope>0.25</Slope>
      <PlateauTemperature>4</PlateauTemperature>
      <PlateauTime>1</PlateauTime>
      <OverShootSlope1>0.1</OverShootSlope1>
      <OverShootTemperature>0</OverShootTemperature>
      <OverShootTime>0</OverShootTime>
      <OverShootSlope2>0.1</OverShootSlope2>
      <GotoNumber>0</GotoNumber>
      <LoopNumber>0</LoopNumber>
      <PIDNumber>1</PIDNumber>
      <LidTemp>110</LidTemp>
    </Step>
    <PIDSet>
      <PID number="1">
        <PHeating>60</PHeating>
        <PCooling>80</PCooling>
        <IHeating>250</IHeating>
        <ICooling>100</ICooling>
        <DHeating>10</DHeating>
        <DCooling>10</DCooling>
        <PLid>100</PLid>
        <ILid>70</ILid>
      </PID>
    </PIDSet>
  </Method>
  <Method methodName="PTplus_cDNA_1st_strand" creator="WSR" dateTime="2025-08-18T17:23:46.8032712+08:00">
    <Variant>960000</Variant>
    <PlateType>0</PlateType>
    <FluidQuantity>0</FluidQuantity>
    <PostHeating>true</PostHeating>
    <StartBlockTemperature>4</StartBlockTemperature>
    <StartLidTemperature>110</StartLidTemperature>
    <Step>
      <Number>1</Number>
      <Slope>4.4</Slope>
      <PlateauTemperature>25</PlateauTemperature>
      <PlateauTime>300</PlateauTime>
      <OverShootSlope1>0.1</OverShootSlope1>
      <OverShootTemperature>0</OverShootTemperature>
      <OverShootTime>0</OverShootTime>
      <OverShootSlope2>0.1</OverShootSlope2>
      <GotoNumber>0</GotoNumber>
      <LoopNumber>0</LoopNumber>
      <PIDNumber>1</PIDNumber>
      <LidTemp>110</LidTemp>
    </Step>
    <Step>
      <Number>2</Number>
      <Slope>4.4</Slope>
      <PlateauTemperature>42</PlateauTemperature>
      <PlateauTime>1200</PlateauTime>
      <OverShootSlope1>4.4</OverShootSlope1>
      <OverShootTemperature>0</OverShootTemperature>
      <OverShootTime>0</OverShootTime>
      <OverShootSlope2>2.2</OverShootSlope2>
      <GotoNumber>0</GotoNumber>
      <LoopNumber>0</LoopNumber>
      <PIDNumber>1</PIDNumber>
      <LidTemp>110</LidTemp>
    </Step>
    <Step>
      <Number>3</Number>
      <Slope>4.4</Slope>
      <PlateauTemperature>85</PlateauTemperature>
      <PlateauTime>300</PlateauTime>
      <OverShootSlope1>4.4</OverShootSlope1>
      <OverShootTemperature>0</OverShootTemperature>
      <OverShootTime>0</OverShootTime>
      <OverShootSlope2>2.2</OverShootSlope2>
      <GotoNumber>0</GotoNumber>
      <LoopNumber>0</LoopNumber>
      <PIDNumber>1</PIDNumber>
      <LidTemp>110</LidTemp>
    </Step>
    <Step>
      <Number>4</Number>
      <Slope>2.2</Slope>
      <PlateauTemperature>60</PlateauTemperature>
      <PlateauTime>1</PlateauTime>
      <OverShootSlope1>2.2</OverShootSlope1>
      <OverShootTemperature>0</OverShootTemperature>
      <OverShootTime>0</OverShootTime>
      <OverShootSlope2>2.2</OverShootSlope2>
      <GotoNumber>0</GotoNumber>
      <LoopNumber>0</LoopNumber>
      <PIDNumber>1</PIDNumber>
      <LidTemp>110</LidTemp>
    </Step>
    <Step>
      <Number>5</Number>
      <Slope>1.4</Slope>
      <PlateauTemperature>40</PlateauTemperature>
      <PlateauTime>1</PlateauTime>
      <OverShootSlope1>1.4</OverShootSlope1>
      <OverShootTemperature>0</OverShootTemperature>
      <OverShootTime>0</OverShootTime>
      <OverShootSlope2>2.2</OverShootSlope2>
      <GotoNumber>0</GotoNumber>
      <LoopNumber>0</LoopNumber>
      <PIDNumber>1</PIDNumber>
      <LidTemp>110</LidTemp>
    </Step>
    <Step>
      <Number>6</Number>
      <Slope>0.8</Slope>
      <PlateauTemperature>20</PlateauTemperature>
      <PlateauTime>1</PlateauTime>
      <OverShootSlope1>0.1</OverShootSlope1>
      <OverShootTemperature>0</OverShootTemperature>
      <OverShootTime>0</OverShootTime>
      <OverShootSlope2>0.1</OverShootSlope2>
      <GotoNumber>0</GotoNumber>
      <LoopNumber>0</LoopNumber>
      <PIDNumber>1</PIDNumber>
      <LidTemp>110</LidTemp>
    </Step>
    <Step>
      <Number>7</Number>
      <Slope>0.25</Slope>
      <PlateauTemperature>4</PlateauTemperature>
      <PlateauTime>1</PlateauTime>
      <OverShootSlope1>0.1</OverShootSlope1>
      <OverShootTemperature>0</OverShootTemperature>
      <OverShootTime>0</OverShootTime>
      <OverShootSlope2>0.1</OverShootSlope2>
      <GotoNumber>0</GotoNumber>
      <LoopNumber>0</LoopNumber>
      <PIDNumber>1</PIDNumber>
      <LidTemp>110</LidTemp>
    </Step>
    <PIDSet>
      <PID number="1">
        <PHeating>60</PHeating>
        <PCooling>80</PCooling>
        <IHeating>250</IHeating>
        <ICooling>100</ICooling>
        <DHeating>10</DHeating>
        <DCooling>10</DCooling>
        <PLid>100</PLid>
        <ILid>70</ILid>
      </PID>
    </PIDSet>
  </Method>
  <Method methodName="PTplus_cDNA_2nd_strand" creator="WSR" dateTime="2025-08-18T17:26:40.9214926+08:00">
    <Variant>960000</Variant>
    <PlateType>0</PlateType>
    <FluidQuantity>1</FluidQuantity>
    <PostHeating>true</PostHeating>
    <StartBlockTemperature>4</StartBlockTemperature>
    <StartLidTemperature>110</StartLidTemperature>
    <Step>
      <Number>1</Number>
      <Slope>4.4</Slope>
      <PlateauTemperature>16</PlateauTemperature>
      <PlateauTime>300</PlateauTime>
      <OverShootSlope1>0.1</OverShootSlope1>
      <OverShootTemperature>0</OverShootTemperature>
      <OverShootTime>0</OverShootTime>
      <OverShootSlope2>0.1</OverShootSlope2>
      <GotoNumber>0</GotoNumber>
      <LoopNumber>0</LoopNumber>
      <PIDNumber>1</PIDNumber>
      <LidTemp>110</LidTemp>
    </Step>
    <Step>
      <Number>2</Number>
      <Slope>0.23</Slope>
      <PlateauTemperature>4</PlateauTemperature>
      <PlateauTime>1</PlateauTime>
      <OverShootSlope1>0.1</OverShootSlope1>
      <OverShootTemperature>0</OverShootTemperature>
      <OverShootTime>0</OverShootTime>
      <OverShootSlope2>0.1</OverShootSlope2>
      <GotoNumber>0</GotoNumber>
      <LoopNumber>0</LoopNumber>
      <PIDNumber>1</PIDNumber>
      <LidTemp>110</LidTemp>
    </Step>
    <PIDSet>
      <PID number="1">
        <PHeating>60</PHeating>
        <PCooling>80</PCooling>
        <IHeating>250</IHeating>
        <ICooling>100</ICooling>
        <DHeating>10</DHeating>
        <DCooling>10</DCooling>
        <PLid>100</PLid>
        <ILid>70</ILid>
      </PID>
    </PIDSet>
  </Method>
  <Method methodName="PTplus_Frag_ER" creator="WSR" dateTime="2025-08-18T17:30:14.587054+08:00">
    <Variant>960000</Variant>
    <PlateType>0</PlateType>
    <FluidQuantity>1</FluidQuantity>
    <PostHeating>true</PostHeating>
    <StartBlockTemperature>4</StartBlockTemperature>
    <StartLidTemperature>110</StartLidTemperature>
    <Step>
      <Number>1</Number>
      <Slope>4.4</Slope>
      <PlateauTemperature>4</PlateauTemperature>
      <PlateauTime>60</PlateauTime>
      <OverShootSlope1>0.1</OverShootSlope1>
      <OverShootTemperature>0</OverShootTemperature>
      <OverShootTime>0</OverShootTime>
      <OverShootSlope2>0.1</OverShootSlope2>
      <GotoNumber>0</GotoNumber>
      <LoopNumber>0</LoopNumber>
      <PIDNumber>1</PIDNumber>
      <LidTemp>110</LidTemp>
    </Step>
    <Step>
      <Number>2</Number>
      <Slope>4.4</Slope>
      <PlateauTemperature>30</PlateauTemperature>
      <PlateauTime>1200</PlateauTime>
      <OverShootSlope1>0.1</OverShootSlope1>
      <OverShootTemperature>0</OverShootTemperature>
      <OverShootTime>0</OverShootTime>
      <OverShootSlope2>0.1</OverShootSlope2>
      <GotoNumber>0</GotoNumber>
      <LoopNumber>0</LoopNumber>
      <PIDNumber>1</PIDNumber>
      <LidTemp>110</LidTemp>
    </Step>
    <Step>
      <Number>3</Number>
      <Slope>4.4</Slope>
      <PlateauTemperature>72</PlateauTemperature>
      <PlateauTime>600</PlateauTime>
      <OverShootSlope1>4.4</OverShootSlope1>
      <OverShootTemperature>0</OverShootTemperature>
      <OverShootTime>0</OverShootTime>
      <OverShootSlope2>2.2</OverShootSlope2>
      <GotoNumber>0</GotoNumber>
      <LoopNumber>0</LoopNumber>
      <PIDNumber>1</PIDNumber>
      <LidTemp>110</LidTemp>
    </Step>
    <Step>
      <Number>4</Number>
      <Slope>2</Slope>
      <PlateauTemperature>60</PlateauTemperature>
      <PlateauTime>1</PlateauTime>
      <OverShootSlope1>2</OverShootSlope1>
      <OverShootTemperature>0</OverShootTemperature>
      <OverShootTime>0</OverShootTime>
      <OverShootSlope2>2.2</OverShootSlope2>
      <GotoNumber>0</GotoNumber>
      <LoopNumber>0</LoopNumber>
      <PIDNumber>1</PIDNumber>
      <LidTemp>110</LidTemp>
    </Step>
    <Step>
      <Number>5</Number>
      <Slope>1.3</Slope>
      <PlateauTemperature>40</PlateauTemperature>
      <PlateauTime>1</PlateauTime>
      <OverShootSlope1>1.3</OverShootSlope1>
      <OverShootTemperature>0</OverShootTemperature>
      <OverShootTime>0</OverShootTime>
      <OverShootSlope2>2.2</OverShootSlope2>
      <GotoNumber>0</GotoNumber>
      <LoopNumber>0</LoopNumber>
      <PIDNumber>1</PIDNumber>
      <LidTemp>110</LidTemp>
    </Step>
    <Step>
      <Number>6</Number>
      <Slope>0.75</Slope>
      <PlateauTemperature>20</PlateauTemperature>
      <PlateauTime>1</PlateauTime>
      <OverShootSlope1>0.1</OverShootSlope1>
      <OverShootTemperature>0</OverShootTemperature>
      <OverShootTime>0</OverShootTime>
      <OverShootSlope2>0.1</OverShootSlope2>
      <GotoNumber>0</GotoNumber>
      <LoopNumber>0</LoopNumber>
      <PIDNumber>1</PIDNumber>
      <LidTemp>110</LidTemp>
    </Step>
    <Step>
      <Number>7</Number>
      <Slope>0.23</Slope>
      <PlateauTemperature>4</PlateauTemperature>
      <PlateauTime>1</PlateauTime>
      <OverShootSlope1>0.1</OverShootSlope1>
      <OverShootTemperature>0</OverShootTemperature>
      <OverShootTime>0</OverShootTime>
      <OverShootSlope2>0.1</OverShootSlope2>
      <GotoNumber>0</GotoNumber>
      <LoopNumber>0</LoopNumber>
      <PIDNumber>1</PIDNumber>
      <LidTemp>110</LidTemp>
    </Step>
    <PIDSet>
      <PID number="1">
        <PHeating>60</PHeating>
        <PCooling>80</PCooling>
        <IHeating>250</IHeating>
        <ICooling>100</ICooling>
        <DHeating>10</DHeating>
        <DCooling>10</DCooling>
        <PLid>100</PLid>
        <ILid>70</ILid>
      </PID>
    </PIDSet>
  </Method>
  <Method methodName="PTplus_Ligation" creator="WSR" dateTime="2025-08-18T17:35:03.599187+08:00">
    <Variant>960000</Variant>
    <PlateType>0</PlateType>
    <FluidQuantity>2</FluidQuantity>
    <PostHeating>true</PostHeating>
    <StartBlockTemperature>4</StartBlockTemperature>
    <StartLidTemperature>110</StartLidTemperature>
    <Step>
      <Number>1</Number>
      <Slope>4.4</Slope>
      <PlateauTemperature>23</PlateauTemperature>
      <PlateauTime>900</PlateauTime>
      <OverShootSlope1>0.1</OverShootSlope1>
      <OverShootTemperature>0</OverShootTemperature>
      <OverShootTime>0</OverShootTime>
      <OverShootSlope2>0.1</OverShootSlope2>
      <GotoNumber>0</GotoNumber>
      <LoopNumber>0</LoopNumber>
      <PIDNumber>1</PIDNumber>
      <LidTemp>110</LidTemp>
    </Step>
    <Step>
      <Number>2</Number>
      <Slope>0.18</Slope>
      <PlateauTemperature>4</PlateauTemperature>
      <PlateauTime>1</PlateauTime>
      <OverShootSlope1>0.1</OverShootSlope1>
      <OverShootTemperature>0</OverShootTemperature>
      <OverShootTime>0</OverShootTime>
      <OverShootSlope2>0.1</OverShootSlope2>
      <GotoNumber>0</GotoNumber>
      <LoopNumber>0</LoopNumber>
      <PIDNumber>1</PIDNumber>
      <LidTemp>110</LidTemp>
    </Step>
    <PIDSet>
      <PID number="1">
        <PHeating>60</PHeating>
        <PCooling>80</PCooling>
        <IHeating>250</IHeating>
        <ICooling>100</ICooling>
        <DHeating>10</DHeating>
        <DCooling>10</DCooling>
        <PLid>100</PLid>
        <ILid>70</ILid>
      </PID>
    </PIDSet>
  </Method>
  <Method methodName="PTplus_PCR_after_Ligation" creator="WSR" dateTime="2025-08-18T17:36:11.6569439+08:00">
    <Variant>960000</Variant>
    <PlateType>0</PlateType>
    <FluidQuantity>1</FluidQuantity>
    <PostHeating>true</PostHeating>
    <StartBlockTemperature>4</StartBlockTemperature>
    <StartLidTemperature>110</StartLidTemperature>
    <Step>
      <Number>1</Number>
      <Slope>4.4</Slope>
      <PlateauTemperature>98</PlateauTemperature>
      <PlateauTime>120</PlateauTime>
      <OverShootSlope1>4.4</OverShootSlope1>
      <OverShootTemperature>0</OverShootTemperature>
      <OverShootTime>0</OverShootTime>
      <OverShootSlope2>2.2</OverShootSlope2>
      <GotoNumber>0</GotoNumber>
      <LoopNumber>0</LoopNumber>
      <PIDNumber>1</PIDNumber>
      <LidTemp>110</LidTemp>
    </Step>
    <Step>
      <Number>2</Number>
      <Slope>4.4</Slope>
      <PlateauTemperature>98</PlateauTemperature>
      <PlateauTime>15</PlateauTime>
      <OverShootSlope1>0.1</OverShootSlope1>
      <OverShootTemperature>0</OverShootTemperature>
      <OverShootTime>0</OverShootTime>
      <OverShootSlope2>0.1</OverShootSlope2>
      <GotoNumber>0</GotoNumber>
      <LoopNumber>0</LoopNumber>
      <PIDNumber>1</PIDNumber>
      <LidTemp>110</LidTemp>
    </Step>
    <Step>
      <Number>3</Number>
      <Slope>2</Slope>
      <PlateauTemperature>56</PlateauTemperature>
      <PlateauTime>15</PlateauTime>
      <OverShootSlope1>2</OverShootSlope1>
      <OverShootTemperature>0</OverShootTemperature>
      <OverShootTime>0</OverShootTime>
      <OverShootSlope2>2.2</OverShootSlope2>
      <GotoNumber>0</GotoNumber>
      <LoopNumber>0</LoopNumber>
      <PIDNumber>1</PIDNumber>
      <LidTemp>110</LidTemp>
    </Step>
    <Step>
      <Number>4</Number>
      <Slope>4.4</Slope>
      <PlateauTemperature>72</PlateauTemperature>
      <PlateauTime>30</PlateauTime>
      <OverShootSlope1>4.4</OverShootSlope1>
      <OverShootTemperature>0</OverShootTemperature>
      <OverShootTime>0</OverShootTime>
      <OverShootSlope2>2.2</OverShootSlope2>
      <GotoNumber>2</GotoNumber>
      <LoopNumber>20</LoopNumber>
      <PIDNumber>1</PIDNumber>
      <LidTemp>110</LidTemp>
    </Step>
    <Step>
      <Number>5</Number>
      <Slope>4.4</Slope>
      <PlateauTemperature>72</PlateauTemperature>
      <PlateauTime>300</PlateauTime>
      <OverShootSlope1>0.1</OverShootSlope1>
      <OverShootTemperature>0</OverShootTemperature>
      <OverShootTime>0</OverShootTime>
      <OverShootSlope2>0.1</OverShootSlope2>
      <GotoNumber>0</GotoNumber>
      <LoopNumber>0</LoopNumber>
      <PIDNumber>1</PIDNumber>
      <LidTemp>110</LidTemp>
    </Step>
    <Step>
      <Number>6</Number>
      <Slope>2</Slope>
      <PlateauTemperature>60</PlateauTemperature>
      <PlateauTime>1</PlateauTime>
      <OverShootSlope1>2</OverShootSlope1>
      <OverShootTemperature>0</OverShootTemperature>
      <OverShootTime>0</OverShootTime>
      <OverShootSlope2>2.2</OverShootSlope2>
      <GotoNumber>0</GotoNumber>
      <LoopNumber>0</LoopNumber>
      <PIDNumber>1</PIDNumber>
      <LidTemp>110</LidTemp>
    </Step>
    <Step>
      <Number>7</Number>
      <Slope>1.3</Slope>
      <PlateauTemperature>40</PlateauTemperature>
      <PlateauTime>1</PlateauTime>
      <OverShootSlope1>1.3</OverShootSlope1>
      <OverShootTemperature>0</OverShootTemperature>
      <OverShootTime>0</OverShootTime>
      <OverShootSlope2>2.2</OverShootSlope2>
      <GotoNumber>0</GotoNumber>
      <LoopNumber>0</LoopNumber>
      <PIDNumber>1</PIDNumber>
      <LidTemp>110</LidTemp>
    </Step>
    <Step>
      <Number>8</Number>
      <Slope>0.75</Slope>
      <PlateauTemperature>20</PlateauTemperature>
      <PlateauTime>1</PlateauTime>
      <OverShootSlope1>0.1</OverShootSlope1>
      <OverShootTemperature>0</OverShootTemperature>
      <OverShootTime>0</OverShootTime>
      <OverShootSlope2>0.1</OverShootSlope2>
      <GotoNumber>0</GotoNumber>
      <LoopNumber>0</LoopNumber>
      <PIDNumber>1</PIDNumber>
      <LidTemp>110</LidTemp>
    </Step>
    <Step>
      <Number>9</Number>
      <Slope>0.23</Slope>
      <PlateauTemperature>4</PlateauTemperature>
      <PlateauTime>1</PlateauTime>
      <OverShootSlope1>0.1</OverShootSlope1>
      <OverShootTemperature>0</OverShootTemperature>
      <OverShootTime>0</OverShootTime>
      <OverShootSlope2>0.1</OverShootSlope2>
      <GotoNumber>0</GotoNumber>
      <LoopNumber>0</LoopNumber>
      <PIDNumber>1</PIDNumber>
      <LidTemp>110</LidTemp>
    </Step>
    <PIDSet>
      <PID number="1">
        <PHeating>60</PHeating>
        <PCooling>80</PCooling>
        <IHeating>250</IHeating>
        <ICooling>100</ICooling>
        <DHeating>10</DHeating>
        <DCooling>10</DCooling>
        <PLid>100</PLid>
        <ILid>70</ILid>
      </PID>
    </PIDSet>
  </Method>
  <Method methodName="PTplus_hybrid" creator="WSR" dateTime="2025-08-18T17:41:52.0549281+08:00">
    <Variant>960000</Variant>
    <PlateType>0</PlateType>
    <FluidQuantity>1</FluidQuantity>
    <PostHeating>true</PostHeating>
    <StartBlockTemperature>4</StartBlockTemperature>
    <StartLidTemperature>110</StartLidTemperature>
    <Step>
      <Number>1</Number>
      <Slope>4.4</Slope>
      <PlateauTemperature>85</PlateauTemperature>
      <PlateauTime>300</PlateauTime>
      <OverShootSlope1>4.4</OverShootSlope1>
      <OverShootTemperature>0</OverShootTemperature>
      <OverShootTime>0</OverShootTime>
      <OverShootSlope2>2.2</OverShootSlope2>
      <GotoNumber>0</GotoNumber>
      <LoopNumber>0</LoopNumber>
      <PIDNumber>1</PIDNumber>
      <LidTemp>110</LidTemp>
    </Step>
    <Step>
      <Number>2</Number>
      <Slope>2</Slope>
      <PlateauTemperature>60</PlateauTemperature>
      <PlateauTime>3600</PlateauTime>
      <OverShootSlope1>2</OverShootSlope1>
      <OverShootTemperature>0</OverShootTemperature>
      <OverShootTime>0</OverShootTime>
      <OverShootSlope2>2.2</OverShootSlope2>
      <GotoNumber>0</GotoNumber>
      <LoopNumber>0</LoopNumber>
      <PIDNumber>1</PIDNumber>
      <LidTemp>110</LidTemp>
    </Step>
    <PIDSet>
      <PID number="1">
        <PHeating>60</PHeating>
        <PCooling>80</PCooling>
        <IHeating>250</IHeating>
        <ICooling>100</ICooling>
        <DHeating>10</DHeating>
        <DCooling>10</DCooling>
        <PLid>100</PLid>
        <ILid>70</ILid>
      </PID>
    </PIDSet>
  </Method>
  <Method methodName="PTplus_Post_PCR" creator="WSR" dateTime="2025-08-18T17:45:21.8710359+08:00">
    <Variant>960000</Variant>
    <PlateType>0</PlateType>
    <FluidQuantity>1</FluidQuantity>
    <PostHeating>true</PostHeating>
    <StartBlockTemperature>4</StartBlockTemperature>
    <StartLidTemperature>110</StartLidTemperature>
    <Step>
      <Number>1</Number>
      <Slope>4.4</Slope>
      <PlateauTemperature>95</PlateauTemperature>
      <PlateauTime>60</PlateauTime>
      <OverShootSlope1>4.4</OverShootSlope1>
      <OverShootTemperature>0</OverShootTemperature>
      <OverShootTime>0</OverShootTime>
      <OverShootSlope2>2.2</OverShootSlope2>
      <GotoNumber>0</GotoNumber>
      <LoopNumber>0</LoopNumber>
      <PIDNumber>1</PIDNumber>
      <LidTemp>110</LidTemp>
    </Step>
    <Step>
      <Number>2</Number>
      <Slope>4.4</Slope>
      <PlateauTemperature>98</PlateauTemperature>
      <PlateauTime>10</PlateauTime>
      <OverShootSlope1>0.1</OverShootSlope1>
      <OverShootTemperature>0</OverShootTemperature>
      <OverShootTime>0</OverShootTime>
      <OverShootSlope2>0.1</OverShootSlope2>
      <GotoNumber>0</GotoNumber>
      <LoopNumber>0</LoopNumber>
      <PIDNumber>1</PIDNumber>
      <LidTemp>110</LidTemp>
    </Step>
    <Step>
      <Number>3</Number>
      <Slope>2</Slope>
      <PlateauTemperature>60</PlateauTemperature>
      <PlateauTime>20</PlateauTime>
      <OverShootSlope1>2</OverShootSlope1>
      <OverShootTemperature>0</OverShootTemperature>
      <OverShootTime>0</OverShootTime>
      <OverShootSlope2>2.2</OverShootSlope2>
      <GotoNumber>0</GotoNumber>
      <LoopNumber>0</LoopNumber>
      <PIDNumber>1</PIDNumber>
      <LidTemp>110</LidTemp>
    </Step>
    <Step>
      <Number>4</Number>
      <Slope>4.4</Slope>
      <PlateauTemperature>72</PlateauTemperature>
      <PlateauTime>20</PlateauTime>
      <OverShootSlope1>4.4</OverShootSlope1>
      <OverShootTemperature>0</OverShootTemperature>
      <OverShootTime>0</OverShootTime>
      <OverShootSlope2>2.2</OverShootSlope2>
      <GotoNumber>2</GotoNumber>
      <LoopNumber>22</LoopNumber>
      <PIDNumber>1</PIDNumber>
      <LidTemp>110</LidTemp>
    </Step>
    <Step>
      <Number>5</Number>
      <Slope>4.4</Slope>
      <PlateauTemperature>72</PlateauTemperature>
      <PlateauTime>60</PlateauTime>
      <OverShootSlope1>0.1</OverShootSlope1>
      <OverShootTemperature>0</OverShootTemperature>
      <OverShootTime>0</OverShootTime>
      <OverShootSlope2>0.1</OverShootSlope2>
      <GotoNumber>0</GotoNumber>
      <LoopNumber>0</LoopNumber>
      <PIDNumber>1</PIDNumber>
      <LidTemp>110</LidTemp>
    </Step>
    <Step>
      <Number>6</Number>
      <Slope>2</Slope>
      <PlateauTemperature>60</PlateauTemperature>
      <PlateauTime>1</PlateauTime>
      <OverShootSlope1>2</OverShootSlope1>
      <OverShootTemperature>0</OverShootTemperature>
      <OverShootTime>0</OverShootTime>
      <OverShootSlope2>2.2</OverShootSlope2>
      <GotoNumber>0</GotoNumber>
      <LoopNumber>0</LoopNumber>
      <PIDNumber>1</PIDNumber>
      <LidTemp>110</LidTemp>
    </Step>
    <Step>
      <Number>7</Number>
      <Slope>1.3</Slope>
      <PlateauTemperature>40</PlateauTemperature>
      <PlateauTime>1</PlateauTime>
      <OverShootSlope1>1.3</OverShootSlope1>
      <OverShootTemperature>0</OverShootTemperature>
      <OverShootTime>0</OverShootTime>
      <OverShootSlope2>2.2</OverShootSlope2>
      <GotoNumber>0</GotoNumber>
      <LoopNumber>0</LoopNumber>
      <PIDNumber>1</PIDNumber>
      <LidTemp>110</LidTemp>
    </Step>
    <Step>
      <Number>8</Number>
      <Slope>0.75</Slope>
      <PlateauTemperature>20</PlateauTemperature>
      <PlateauTime>1</PlateauTime>
      <OverShootSlope1>0.1</OverShootSlope1>
      <OverShootTemperature>0</OverShootTemperature>
      <OverShootTime>0</OverShootTime>
      <OverShootSlope2>0.1</OverShootSlope2>
      <GotoNumber>0</GotoNumber>
      <LoopNumber>0</LoopNumber>
      <PIDNumber>1</PIDNumber>
      <LidTemp>110</LidTemp>
    </Step>
    <Step>
      <Number>9</Number>
      <Slope>0.23</Slope>
      <PlateauTemperature>4</PlateauTemperature>
      <PlateauTime>1</PlateauTime>
      <OverShootSlope1>0.1</OverShootSlope1>
      <OverShootTemperature>0</OverShootTemperature>
      <OverShootTime>0</OverShootTime>
      <OverShootSlope2>0.1</OverShootSlope2>
      <GotoNumber>0</GotoNumber>
      <LoopNumber>0</LoopNumber>
      <PIDNumber>1</PIDNumber>
      <LidTemp>110</LidTemp>
    </Step>
    <PIDSet>
      <PID number="1">
        <PHeating>60</PHeating>
        <PCooling>80</PCooling>
        <IHeating>250</IHeating>
        <ICooling>100</ICooling>
        <DHeating>10</DHeating>
        <DCooling>10</DCooling>
        <PLid>100</PLid>
        <ILid>70</ILid>
      </PID>
    </PIDSet>
  </Method>
  <Method methodName="PTplus_25-4" creator="wzy" dateTime="2024-09-18T09:37:49.7644588+08:00">
    <Variant>960000</Variant>
    <PlateType>0</PlateType>
    <FluidQuantity>0</FluidQuantity>
    <PostHeating>true</PostHeating>
    <StartBlockTemperature>25</StartBlockTemperature>
    <StartLidTemperature>110</StartLidTemperature>
    <Step>
      <Number>1</Number>
      <Slope>2</Slope>
      <PlateauTemperature>4</PlateauTemperature>
      <PlateauTime>5</PlateauTime>
      <OverShootSlope1>0.1</OverShootSlope1>
      <OverShootTemperature>0</OverShootTemperature>
      <OverShootTime>0</OverShootTime>
      <OverShootSlope2>0.1</OverShootSlope2>
      <GotoNumber>0</GotoNumber>
      <LoopNumber>0</LoopNumber>
      <PIDNumber>1</PIDNumber>
      <LidTemp>110</LidTemp>
    </Step>
    <PIDSet>
      <PID number="1">
        <PHeating>60</PHeating>
        <PCooling>80</PCooling>
        <IHeating>250</IHeating>
        <ICooling>100</ICooling>
        <DHeating>10</DHeating>
        <DCooling>10</DCooling>
        <PLid>100</PLid>
        <ILid>70</ILid>
      </PID>
    </PIDSet>
  </Method>
  <Method methodName="PTplus_60-4" creator="wzy" dateTime="2024-09-24T14:16:24.6456513+08:00">
    <Variant>960000</Variant>
    <PlateType>0</PlateType>
    <FluidQuantity>1</FluidQuantity>
    <PostHeating>true</PostHeating>
    <StartBlockTemperature>60</StartBlockTemperature>
    <StartLidTemperature>95</StartLidTemperature>
    <Step>
      <Number>1</Number>
      <Slope>1.4</Slope>
      <PlateauTemperature>40</PlateauTemperature>
      <PlateauTime>5</PlateauTime>
      <OverShootSlope1>1.4</OverShootSlope1>
      <OverShootTemperature>3.4</OverShootTemperature>
      <OverShootTime>0</OverShootTime>
      <OverShootSlope2>2.2</OverShootSlope2>
      <GotoNumber>0</GotoNumber>
      <LoopNumber>0</LoopNumber>
      <PIDNumber>1</PIDNumber>
      <LidTemp>105</LidTemp>
    </Step>
    <Step>
      <Number>2</Number>
      <Slope>0.8</Slope>
      <PlateauTemperature>20</PlateauTemperature>
      <PlateauTime>1</PlateauTime>
      <OverShootSlope1>0.1</OverShootSlope1>
      <OverShootTemperature>0</OverShootTemperature>
      <OverShootTime>0</OverShootTime>
      <OverShootSlope2>0.1</OverShootSlope2>
      <GotoNumber>0</GotoNumber>
      <LoopNumber>0</LoopNumber>
      <PIDNumber>1</PIDNumber>
      <LidTemp>110</LidTemp>
    </Step>
    <Step>
      <Number>3</Number>
      <Slope>0.25</Slope>
      <PlateauTemperature>4</PlateauTemperature>
      <PlateauTime>5</PlateauTime>
      <OverShootSlope1>0.1</OverShootSlope1>
      <OverShootTemperature>0</OverShootTemperature>
      <OverShootTime>0</OverShootTime>
      <OverShootSlope2>0.1</OverShootSlope2>
      <GotoNumber>0</GotoNumber>
      <LoopNumber>0</LoopNumber>
      <PIDNumber>1</PIDNumber>
      <LidTemp>110</LidTemp>
    </Step>
    <PIDSet>
      <PID number="1">
        <PHeating>60</PHeating>
        <PCooling>80</PCooling>
        <IHeating>250</IHeating>
        <ICooling>100</ICooling>
        <DHeating>10</DHeating>
        <DCooling>10</DCooling>
        <PLid>100</PLid>
        <ILid>70</ILid>
      </PID>
    </PIDSet>
  </Method>
  <Method methodName="25-4" creator="wzy" dateTime="2024-09-18T09:37:49.7644588+08:00">
    <Variant>960000</Variant>
    <PlateType>0</PlateType>
    <FluidQuantity>0</FluidQuantity>
    <PostHeating>true</PostHeating>
    <StartBlockTemperature>25</StartBlockTemperature>
    <StartLidTemperature>110</StartLidTemperature>
    <Step>
      <Number>1</Number>
      <Slope>2</Slope>
      <PlateauTemperature>4</PlateauTemperature>
      <PlateauTime>5</PlateauTime>
      <OverShootSlope1>0.1</OverShootSlope1>
      <OverShootTemperature>0</OverShootTemperature>
      <OverShootTime>0</OverShootTime>
      <OverShootSlope2>0.1</OverShootSlope2>
      <GotoNumber>0</GotoNumber>
      <LoopNumber>0</LoopNumber>
      <PIDNumber>1</PIDNumber>
      <LidTemp>110</LidTemp>
    </Step>
    <PIDSet>
      <PID number="1">
        <PHeating>60</PHeating>
        <PCooling>80</PCooling>
        <IHeating>250</IHeating>
        <ICooling>100</ICooling>
        <DHeating>10</DHeating>
        <DCooling>10</DCooling>
        <PLid>100</PLid>
        <ILid>70</ILid>
      </PID>
    </PIDSet>
  </Method>
</MethodSet>