<?xml version="1.0" encoding="utf-8"?>
<MethodSet>
  <Method methodName="PTseq_DNB_E25_1st" creator="WSR" dateTime="2025-10-06T11:27:16.4650032+08:00">
    <Variant>960000</Variant>
    <PlateType>0</PlateType>
    <FluidQuantity>2</FluidQuantity>
    <PostHeating>true</PostHeating>
    <StartBlockTemperature>4</StartBlockTemperature>
    <StartLidTemperature>110</StartLidTemperature>
    <Step>
      <Number>1</Number>
      <Slope>4.4</Slope>
      <PlateauTemperature>95</PlateauTemperature>
      <PlateauTime>180</PlateauTime>
      <OverShootSlope1>4.4</OverShootSlope1>
      <OverShootTemperature>7</OverShootTemperature>
      <OverShootTime>9</OverShootTime>
      <OverShootSlope2>2.2</OverShootSlope2>
      <GotoNumber>0</GotoNumber>
      <LoopNumber>0</LoopNumber>
      <PIDNumber>1</PIDNumber>
      <LidTemp>110</LidTemp>
    </Step>
    <Step>
      <Number>2</Number>
      <Slope>1.8</Slope>
      <PlateauTemperature>57</PlateauTemperature>
      <PlateauTime>180</PlateauTime>
      <OverShootSlope1>1.8</OverShootSlope1>
      <OverShootTemperature>5.6</OverShootTemperature>
      <OverShootTime>0</OverShootTime>
      <OverShootSlope2>2.2</OverShootSlope2>
      <GotoNumber>0</GotoNumber>
      <LoopNumber>0</LoopNumber>
      <PIDNumber>1</PIDNumber>
      <LidTemp>110</LidTemp>
    </Step>
    <Step>
      <Number>3</Number>
      <Slope>1.4</Slope>
      <PlateauTemperature>40</PlateauTemperature>
      <PlateauTime>1</PlateauTime>
      <OverShootSlope1>1.4</OverShootSlope1>
      <OverShootTemperature>0</OverShootTemperature>
      <OverShootTime>0</OverShootTime>
      <OverShootSlope2>2.2</OverShootSlope2>
      <GotoNumber>0</GotoNumber>
      <LoopNumber>0</LoopNumber>
      <PIDNumber>1</PIDNumber>
      <LidTemp>110</LidTemp>
    </Step>
    <Step>
      <Number>4</Number>
      <Slope>0.8</Slope>
      <PlateauTemperature>20</PlateauTemperature>
      <PlateauTime>1</PlateauTime>
      <OverShootSlope1>0.1</OverShootSlope1>
      <OverShootTemperature>0</OverShootTemperature>
      <OverShootTime>0</OverShootTime>
      <OverShootSlope2>0.1</OverShootSlope2>
      <GotoNumber>0</GotoNumber>
      <LoopNumber>0</LoopNumber>
      <PIDNumber>1</PIDNumber>
      <LidTemp>110</LidTemp>
    </Step>
    <Step>
      <Number>5</Number>
      <Slope>0.25</Slope>
      <PlateauTemperature>4</PlateauTemperature>
      <PlateauTime>1</PlateauTime>
      <OverShootSlope1>0.1</OverShootSlope1>
      <OverShootTemperature>0</OverShootTemperature>
      <OverShootTime>0</OverShootTime>
      <OverShootSlope2>0.1</OverShootSlope2>
      <GotoNumber>0</GotoNumber>
      <LoopNumber>0</LoopNumber>
      <PIDNumber>1</PIDNumber>
      <LidTemp>110</LidTemp>
    </Step>
    <PIDSet>
      <PID number="1">
        <PHeating>60</PHeating>
        <PCooling>80</PCooling>
        <IHeating>250</IHeating>
        <ICooling>100</ICooling>
        <DHeating>10</DHeating>
        <DCooling>10</DCooling>
        <PLid>100</PLid>
        <ILid>70</ILid>
      </PID>
    </PIDSet>
  </Method>
  <Method methodName="PTseq_DNB_E25_2nd" creator="WSR" dateTime="2025-10-06T11:28:53.8303482+08:00">
    <Variant>960000</Variant>
    <PlateType>0</PlateType>
    <FluidQuantity>2</FluidQuantity>
    <PostHeating>true</PostHeating>
    <StartBlockTemperature>4</StartBlockTemperature>
    <StartLidTemperature>110</StartLidTemperature>
    <Step>
      <Number>1</Number>
      <Slope>4.4</Slope>
      <PlateauTemperature>30</PlateauTemperature>
      <PlateauTime>1500</PlateauTime>
      <OverShootSlope1>0.1</OverShootSlope1>
      <OverShootTemperature>0</OverShootTemperature>
      <OverShootTime>0</OverShootTime>
      <OverShootSlope2>0.1</OverShootSlope2>
      <GotoNumber>0</GotoNumber>
      <LoopNumber>0</LoopNumber>
      <PIDNumber>1</PIDNumber>
      <LidTemp>35</LidTemp>
    </Step>
    <Step>
      <Number>2</Number>
      <Slope>0.75</Slope>
      <PlateauTemperature>20</PlateauTemperature>
      <PlateauTime>1</PlateauTime>
      <OverShootSlope1>0.1</OverShootSlope1>
      <OverShootTemperature>0</OverShootTemperature>
      <OverShootTime>0</OverShootTime>
      <OverShootSlope2>0.1</OverShootSlope2>
      <GotoNumber>0</GotoNumber>
      <LoopNumber>0</LoopNumber>
      <PIDNumber>1</PIDNumber>
      <LidTemp>35</LidTemp>
    </Step>
    <Step>
      <Number>3</Number>
      <Slope>0.25</Slope>
      <PlateauTemperature>4</PlateauTemperature>
      <PlateauTime>1</PlateauTime>
      <OverShootSlope1>0.1</OverShootSlope1>
      <OverShootTemperature>0</OverShootTemperature>
      <OverShootTime>0</OverShootTime>
      <OverShootSlope2>0.1</OverShootSlope2>
      <GotoNumber>0</GotoNumber>
      <LoopNumber>0</LoopNumber>
      <PIDNumber>1</PIDNumber>
      <LidTemp>35</LidTemp>
    </Step>
    <PIDSet>
      <PID number="1">
        <PHeating>60</PHeating>
        <PCooling>80</PCooling>
        <IHeating>250</IHeating>
        <ICooling>100</ICooling>
        <DHeating>10</DHeating>
        <DCooling>10</DCooling>
        <PLid>100</PLid>
        <ILid>70</ILid>
      </PID>
    </PIDSet>
  </Method>
  <Method methodName="Keep4_8h" creator="WSR" dateTime="2025-10-06T11:30:38.0886434+08:00">
    <Variant>960000</Variant>
    <PlateType>0</PlateType>
    <FluidQuantity>2</FluidQuantity>
    <PostHeating>true</PostHeating>
    <StartBlockTemperature>4</StartBlockTemperature>
    <StartLidTemperature>110</StartLidTemperature>
    <Step>
      <Number>1</Number>
      <Slope>4.4</Slope>
      <PlateauTemperature>4</PlateauTemperature>
      <PlateauTime>28800</PlateauTime>
      <OverShootSlope1>0.1</OverShootSlope1>
      <OverShootTemperature>0</OverShootTemperature>
      <OverShootTime>0</OverShootTime>
      <OverShootSlope2>0.1</OverShootSlope2>
      <GotoNumber>0</GotoNumber>
      <LoopNumber>0</LoopNumber>
      <PIDNumber>1</PIDNumber>
      <LidTemp>25</LidTemp>
    </Step>
    <PIDSet>
      <PID number="1">
        <PHeating>60</PHeating>
        <PCooling>80</PCooling>
        <IHeating>250</IHeating>
        <ICooling>100</ICooling>
        <DHeating>10</DHeating>
        <DCooling>10</DCooling>
        <PLid>100</PLid>
        <ILid>70</ILid>
      </PID>
    </PIDSet>
  </Method>
</MethodSet>