<?xml version="1.0" encoding="utf-8"?>
<MethodSet>
  <PreMethod methodName="PTseq_START" creator="Shan" dateTime="2026-02-20T10:00:00.0000000+08:00">
    <TargetBlockTemperature>25</TargetBlockTemperature>
    <TargetLidTemp>110</TargetLidTemp>
  </PreMethod>
  <Method methodName="PTseq_RT" creator="Shan" dateTime="2026-02-20T10:00:00.0000000+08:00">
    <Variant>960000</Variant>
    <PlateType>0</PlateType>
    <FluidQuantity>0</FluidQuantity>
    <PostHeating>true</PostHeating>
    <StartBlockTemperature>25</StartBlockTemperature>
    <StartLidTemperature>110</StartLidTemperature>
    <Step>
      <Number>1</Number>
      <Slope>4.4</Slope>
      <PlateauTemperature>65</PlateauTemperature>
      <PlateauTime>120</PlateauTime>
      <OverShootSlope1>4.4</OverShootSlope1>
      <OverShootTemperature>0</OverShootTemperature>
      <OverShootTime>0</OverShootTime>
      <OverShootSlope2>2.2</OverShootSlope2>
      <GotoNumber>0</GotoNumber>
      <LoopNumber>0</LoopNumber>
      <PIDNumber>1</PIDNumber>
      <LidTemp>110</LidTemp>
    </Step>
    <Step>
      <Number>2</Number>
      <Slope>1.4</Slope>
      <PlateauTemperature>40</PlateauTemperature>
      <PlateauTime>1</PlateauTime>
      <OverShootSlope1>1.4</OverShootSlope1>
      <OverShootTemperature>0</OverShootTemperature>
      <OverShootTime>0</OverShootTime>
      <OverShootSlope2>2.2</OverShootSlope2>
      <GotoNumber>0</GotoNumber>
      <LoopNumber>0</LoopNumber>
      <PIDNumber>1</PIDNumber>
      <LidTemp>110</LidTemp>
    </Step>
    <Step>
      <Number>3</Number>
      <Slope>0.8</Slope>
      <PlateauTemperature>20</PlateauTemperature>
      <PlateauTime>1</PlateauTime>
      <OverShootSlope1>0.1</OverShootSlope1>
      <OverShootTemperature>0</OverShootTemperature>
      <OverShootTime>0</OverShootTime>
      <OverShootSlope2>0.1</OverShootSlope2>
      <GotoNumber>0</GotoNumber>
      <LoopNumber>0</LoopNumber>
      <PIDNumber>1</PIDNumber>
      <LidTemp>110</LidTemp>
    </Step>
    <Step>
      <Number>4</Number>
      <Slope>0.25</Slope>
      <PlateauTemperature>4</PlateauTemperature>
      <PlateauTime>1</PlateauTime>
      <OverShootSlope1>0.1</OverShootSlope1>
      <OverShootTemperature>0</OverShootTemperature>
      <OverShootTime>0</OverShootTime>
      <OverShootSlope2>0.1</OverShootSlope2>
      <GotoNumber>0</GotoNumber>
      <LoopNumber>0</LoopNumber>
      <PIDNumber>1</PIDNumber>
      <LidTemp>110</LidTemp>
    </Step>
    <PIDSet>
      <PID number="1">
        <PHeating>60</PHeating>
        <PCooling>80</PCooling>
        <IHeating>250</IHeating>
        <ICooling>100</ICooling>
        <DHeating>10</DHeating>
        <DCooling>10</DCooling>
        <PLid>100</PLid>
        <ILid>70</ILid>
      </PID>
    </PIDSet>
  </Method>
  <Method methodName="PTseq_cDNA" creator="Shan" dateTime="2026-02-20T10:00:00.0000000+08:00">
    <Variant>960000</Variant>
    <PlateType>0</PlateType>
    <FluidQuantity>0</FluidQuantity>
    <PostHeating>true</PostHeating>
    <StartBlockTemperature>4</StartBlockTemperature>
    <StartLidTemperature>110</StartLidTemperature>
    <Step>
      <Number>1</Number>
      <Slope>4.4</Slope>
      <PlateauTemperature>25</PlateauTemperature>
      <PlateauTime>300</PlateauTime>
      <OverShootSlope1>0.1</OverShootSlope1>
      <OverShootTemperature>0</OverShootTemperature>
      <OverShootTime>0</OverShootTime>
      <OverShootSlope2>0.1</OverShootSlope2>
      <GotoNumber>0</GotoNumber>
      <LoopNumber>0</LoopNumber>
      <PIDNumber>1</PIDNumber>
      <LidTemp>110</LidTemp>
    </Step>
    <Step>
      <Number>2</Number>
      <Slope>4.4</Slope>
      <PlateauTemperature>37</PlateauTemperature>
      <PlateauTime>1800</PlateauTime>
      <OverShootSlope1>4.4</OverShootSlope1>
      <OverShootTemperature>0</OverShootTemperature>
      <OverShootTime>0</OverShootTime>
      <OverShootSlope2>2.2</OverShootSlope2>
      <GotoNumber>0</GotoNumber>
      <LoopNumber>0</LoopNumber>
      <PIDNumber>1</PIDNumber>
      <LidTemp>110</LidTemp>
    </Step>
    <Step>
      <Number>3</Number>
      <Slope>4.4</Slope>
      <PlateauTemperature>85</PlateauTemperature>
      <PlateauTime>5</PlateauTime>
      <OverShootSlope1>4.4</OverShootSlope1>
      <OverShootTemperature>0</OverShootTemperature>
      <OverShootTime>0</OverShootTime>
      <OverShootSlope2>2.2</OverShootSlope2>
      <GotoNumber>0</GotoNumber>
      <LoopNumber>0</LoopNumber>
      <PIDNumber>1</PIDNumber>
      <LidTemp>110</LidTemp>
    </Step>
    <Step>
      <Number>4</Number>
      <Slope>2.2</Slope>
      <PlateauTemperature>60</PlateauTemperature>
      <PlateauTime>1</PlateauTime>
      <OverShootSlope1>2.2</OverShootSlope1>
      <OverShootTemperature>0</OverShootTemperature>
      <OverShootTime>0</OverShootTime>
      <OverShootSlope2>2.2</OverShootSlope2>
      <GotoNumber>0</GotoNumber>
      <LoopNumber>0</LoopNumber>
      <PIDNumber>1</PIDNumber>
      <LidTemp>110</LidTemp>
    </Step>
    <Step>
      <Number>5</Number>
      <Slope>1.4</Slope>
      <PlateauTemperature>40</PlateauTemperature>
      <PlateauTime>1</PlateauTime>
      <OverShootSlope1>1.4</OverShootSlope1>
      <OverShootTemperature>0</OverShootTemperature>
      <OverShootTime>0</OverShootTime>
      <OverShootSlope2>2.2</OverShootSlope2>
      <GotoNumber>0</GotoNumber>
      <LoopNumber>0</LoopNumber>
      <PIDNumber>1</PIDNumber>
      <LidTemp>110</LidTemp>
    </Step>
    <Step>
      <Number>6</Number>
      <Slope>0.8</Slope>
      <PlateauTemperature>20</PlateauTemperature>
      <PlateauTime>1</PlateauTime>
      <OverShootSlope1>0.1</OverShootSlope1>
      <OverShootTemperature>0</OverShootTemperature>
      <OverShootTime>0</OverShootTime>
      <OverShootSlope2>0.1</OverShootSlope2>
      <GotoNumber>0</GotoNumber>
      <LoopNumber>0</LoopNumber>
      <PIDNumber>1</PIDNumber>
      <LidTemp>110</LidTemp>
    </Step>
    <Step>
      <Number>7</Number>
      <Slope>0.25</Slope>
      <PlateauTemperature>4</PlateauTemperature>
      <PlateauTime>1</PlateauTime>
      <OverShootSlope1>0.1</OverShootSlope1>
      <OverShootTemperature>0</OverShootTemperature>
      <OverShootTime>0</OverShootTime>
      <OverShootSlope2>0.1</OverShootSlope2>
      <GotoNumber>0</GotoNumber>
      <LoopNumber>0</LoopNumber>
      <PIDNumber>1</PIDNumber>
      <LidTemp>110</LidTemp>
    </Step>
    <PIDSet>
      <PID number="1">
        <PHeating>60</PHeating>
        <PCooling>80</PCooling>
        <IHeating>250</IHeating>
        <ICooling>100</ICooling>
        <DHeating>10</DHeating>
        <DCooling>10</DCooling>
        <PLid>100</PLid>
        <ILid>70</ILid>
      </PID>
    </PIDSet>
  </Method>
  <Method methodName="PTseq_TA" creator="Shan" dateTime="2026-02-20T10:00:00.0000000+08:00">
    <Variant>960000</Variant>
    <PlateType>0</PlateType>
    <FluidQuantity>1</FluidQuantity>
    <PostHeating>true</PostHeating>
    <StartBlockTemperature>4</StartBlockTemperature>
    <StartLidTemperature>110</StartLidTemperature>
    <Step>
      <Number>1</Number>
      <Slope>4.4</Slope>
      <PlateauTemperature>95</PlateauTemperature>
      <PlateauTime>180</PlateauTime>
      <OverShootSlope1>4.4</OverShootSlope1>
      <OverShootTemperature>0</OverShootTemperature>
      <OverShootTime>6</OverShootTime>
      <OverShootSlope2>2.2</OverShootSlope2>
      <GotoNumber>0</GotoNumber>
      <LoopNumber>0</LoopNumber>
      <PIDNumber>1</PIDNumber>
      <LidTemp>110</LidTemp>
    </Step>
    <Step>
      <Number>2</Number>
      <Slope>4.4</Slope>
      <PlateauTemperature>95</PlateauTemperature>
      <PlateauTime>30</PlateauTime>
      <OverShootSlope1>4.4</OverShootSlope1>
      <OverShootTemperature>0</OverShootTemperature>
      <OverShootTime>0</OverShootTime>
      <OverShootSlope2>2.2</OverShootSlope2>
      <GotoNumber>0</GotoNumber>
      <LoopNumber>0</LoopNumber>
      <PIDNumber>1</PIDNumber>
      <LidTemp>110</LidTemp>
    </Step>
    <Step>
      <Number>3</Number>
      <Slope>2.2</Slope>
      <PlateauTemperature>60</PlateauTemperature>
      <PlateauTime>60</PlateauTime>
      <OverShootSlope1>2.2</OverShootSlope1>
      <OverShootTemperature>0</OverShootTemperature>
      <OverShootTime>0</OverShootTime>
      <OverShootSlope2>2.2</OverShootSlope2>
      <GotoNumber>0</GotoNumber>
      <LoopNumber>0</LoopNumber>
      <PIDNumber>1</PIDNumber>
      <LidTemp>110</LidTemp>
    </Step>
    <Step>
      <Number>4</Number>
      <Slope>4.4</Slope>
      <PlateauTemperature>72</PlateauTemperature>
      <PlateauTime>45</PlateauTime>
      <OverShootSlope1>4.4</OverShootSlope1>
      <OverShootTemperature>0</OverShootTemperature>
      <OverShootTime>0</OverShootTime>
      <OverShootSlope2>2.2</OverShootSlope2>
      <GotoNumber>2</GotoNumber>
      <LoopNumber>29</LoopNumber>
      <PIDNumber>1</PIDNumber>
      <LidTemp>110</LidTemp>
    </Step>
    <Step>
      <Number>5</Number>
      <Slope>4.4</Slope>
      <PlateauTemperature>72</PlateauTemperature>
      <PlateauTime>60</PlateauTime>
      <OverShootSlope1>4.4</OverShootSlope1>
      <OverShootTemperature>0</OverShootTemperature>
      <OverShootTime>0</OverShootTime>
      <OverShootSlope2>2.2</OverShootSlope2>
      <GotoNumber>0</GotoNumber>
      <LoopNumber>0</LoopNumber>
      <PIDNumber>1</PIDNumber>
      <LidTemp>110</LidTemp>
    </Step>
    <Step>
      <Number>6</Number>
      <Slope>2</Slope>
      <PlateauTemperature>60</PlateauTemperature>
      <PlateauTime>1</PlateauTime>
      <OverShootSlope1>2</OverShootSlope1>
      <OverShootTemperature>0</OverShootTemperature>
      <OverShootTime>0</OverShootTime>
      <OverShootSlope2>2.2</OverShootSlope2>
      <GotoNumber>0</GotoNumber>
      <LoopNumber>0</LoopNumber>
      <PIDNumber>1</PIDNumber>
      <LidTemp>110</LidTemp>
    </Step>
    <Step>
      <Number>7</Number>
      <Slope>1.3</Slope>
      <PlateauTemperature>40</PlateauTemperature>
      <PlateauTime>1</PlateauTime>
      <OverShootSlope1>1.3</OverShootSlope1>
      <OverShootTemperature>0</OverShootTemperature>
      <OverShootTime>0</OverShootTime>
      <OverShootSlope2>2.2</OverShootSlope2>
      <GotoNumber>0</GotoNumber>
      <LoopNumber>0</LoopNumber>
      <PIDNumber>1</PIDNumber>
      <LidTemp>110</LidTemp>
    </Step>
    <Step>
      <Number>8</Number>
      <Slope>0.75</Slope>
      <PlateauTemperature>20</PlateauTemperature>
      <PlateauTime>1</PlateauTime>
      <OverShootSlope1>0.1</OverShootSlope1>
      <OverShootTemperature>0</OverShootTemperature>
      <OverShootTime>0</OverShootTime>
      <OverShootSlope2>0.1</OverShootSlope2>
      <GotoNumber>0</GotoNumber>
      <LoopNumber>0</LoopNumber>
      <PIDNumber>1</PIDNumber>
      <LidTemp>110</LidTemp>
    </Step>
    <Step>
      <Number>9</Number>
      <Slope>0.23</Slope>
      <PlateauTemperature>4</PlateauTemperature>
      <PlateauTime>1</PlateauTime>
      <OverShootSlope1>0.1</OverShootSlope1>
      <OverShootTemperature>0</OverShootTemperature>
      <OverShootTime>0</OverShootTime>
      <OverShootSlope2>0.1</OverShootSlope2>
      <GotoNumber>0</GotoNumber>
      <LoopNumber>0</LoopNumber>
      <PIDNumber>1</PIDNumber>
      <LidTemp>110</LidTemp>
    </Step>
    <PIDSet>
      <PID number="1">
        <PHeating>60</PHeating>
        <PCooling>80</PCooling>
        <IHeating>250</IHeating>
        <ICooling>100</ICooling>
        <DHeating>10</DHeating>
        <DCooling>10</DCooling>
        <PLid>100</PLid>
        <ILid>70</ILid>
      </PID>
    </PIDSet>
  </Method>
  <Method methodName="PTseq_LA" creator="Shan" dateTime="2026-02-20T10:00:00.0000000+08:00">
    <Variant>960000</Variant>
    <PlateType>0</PlateType>
    <FluidQuantity>1</FluidQuantity>
    <PostHeating>true</PostHeating>
    <StartBlockTemperature>4</StartBlockTemperature>
    <StartLidTemperature>110</StartLidTemperature>
    <Step>
      <Number>1</Number>
      <Slope>4.4</Slope>
      <PlateauTemperature>37</PlateauTemperature>
      <PlateauTime>600</PlateauTime>
      <OverShootSlope1>4.4</OverShootSlope1>
      <OverShootTemperature>0</OverShootTemperature>
      <OverShootTime>0</OverShootTime>
      <OverShootSlope2>2.2</OverShootSlope2>
      <GotoNumber>0</GotoNumber>
      <LoopNumber>0</LoopNumber>
      <PIDNumber>1</PIDNumber>
      <LidTemp>110</LidTemp>
    </Step>
    <Step>
      <Number>2</Number>
      <Slope>4.4</Slope>
      <PlateauTemperature>95</PlateauTemperature>
      <PlateauTime>180</PlateauTime>
      <OverShootSlope1>4.4</OverShootSlope1>
      <OverShootTemperature>0</OverShootTemperature>
      <OverShootTime>6</OverShootTime>
      <OverShootSlope2>2.2</OverShootSlope2>
      <GotoNumber>0</GotoNumber>
      <LoopNumber>0</LoopNumber>
      <PIDNumber>1</PIDNumber>
      <LidTemp>110</LidTemp>
    </Step>
    <Step>
      <Number>3</Number>
      <Slope>4.4</Slope>
      <PlateauTemperature>98</PlateauTemperature>
      <PlateauTime>20</PlateauTime>
      <OverShootSlope1>4.4</OverShootSlope1>
      <OverShootTemperature>0</OverShootTemperature>
      <OverShootTime>0</OverShootTime>
      <OverShootSlope2>2.2</OverShootSlope2>
      <GotoNumber>0</GotoNumber>
      <LoopNumber>0</LoopNumber>
      <PIDNumber>1</PIDNumber>
      <LidTemp>110</LidTemp>
    </Step>
    <Step>
      <Number>4</Number>
      <Slope>2.2</Slope>
      <PlateauTemperature>60</PlateauTemperature>
      <PlateauTime>15</PlateauTime>
      <OverShootSlope1>2.2</OverShootSlope1>
      <OverShootTemperature>0</OverShootTemperature>
      <OverShootTime>0</OverShootTime>
      <OverShootSlope2>2.2</OverShootSlope2>
      <GotoNumber>0</GotoNumber>
      <LoopNumber>0</LoopNumber>
      <PIDNumber>1</PIDNumber>
      <LidTemp>110</LidTemp>
    </Step>
    <Step>
      <Number>5</Number>
      <Slope>4.4</Slope>
      <PlateauTemperature>72</PlateauTemperature>
      <PlateauTime>30</PlateauTime>
      <OverShootSlope1>4.4</OverShootSlope1>
      <OverShootTemperature>0</OverShootTemperature>
      <OverShootTime>0</OverShootTime>
      <OverShootSlope2>2.2</OverShootSlope2>
      <GotoNumber>3</GotoNumber>
      <LoopNumber>7</LoopNumber>
      <PIDNumber>1</PIDNumber>
      <LidTemp>110</LidTemp>
    </Step>
    <Step>
      <Number>6</Number>
      <Slope>4.4</Slope>
      <PlateauTemperature>72</PlateauTemperature>
      <PlateauTime>300</PlateauTime>
      <OverShootSlope1>4.4</OverShootSlope1>
      <OverShootTemperature>0</OverShootTemperature>
      <OverShootTime>0</OverShootTime>
      <OverShootSlope2>2.2</OverShootSlope2>
      <GotoNumber>0</GotoNumber>
      <LoopNumber>0</LoopNumber>
      <PIDNumber>1</PIDNumber>
      <LidTemp>110</LidTemp>
    </Step>
    <Step>
      <Number>7</Number>
      <Slope>2</Slope>
      <PlateauTemperature>60</PlateauTemperature>
      <PlateauTime>1</PlateauTime>
      <OverShootSlope1>2</OverShootSlope1>
      <OverShootTemperature>0</OverShootTemperature>
      <OverShootTime>0</OverShootTime>
      <OverShootSlope2>2.2</OverShootSlope2>
      <GotoNumber>0</GotoNumber>
      <LoopNumber>0</LoopNumber>
      <PIDNumber>1</PIDNumber>
      <LidTemp>110</LidTemp>
    </Step>
    <Step>
      <Number>8</Number>
      <Slope>1.3</Slope>
      <PlateauTemperature>40</PlateauTemperature>
      <PlateauTime>1</PlateauTime>
      <OverShootSlope1>1.3</OverShootSlope1>
      <OverShootTemperature>0</OverShootTemperature>
      <OverShootTime>0</OverShootTime>
      <OverShootSlope2>2.2</OverShootSlope2>
      <GotoNumber>0</GotoNumber>
      <LoopNumber>0</LoopNumber>
      <PIDNumber>1</PIDNumber>
      <LidTemp>110</LidTemp>
    </Step>
    <Step>
      <Number>9</Number>
      <Slope>0.75</Slope>
      <PlateauTemperature>20</PlateauTemperature>
      <PlateauTime>1</PlateauTime>
      <OverShootSlope1>0.1</OverShootSlope1>
      <OverShootTemperature>0</OverShootTemperature>
      <OverShootTime>0</OverShootTime>
      <OverShootSlope2>0.1</OverShootSlope2>
      <GotoNumber>0</GotoNumber>
      <LoopNumber>0</LoopNumber>
      <PIDNumber>1</PIDNumber>
      <LidTemp>110</LidTemp>
    </Step>
    <Step>
      <Number>10</Number>
      <Slope>0.23</Slope>
      <PlateauTemperature>4</PlateauTemperature>
      <PlateauTime>1</PlateauTime>
      <OverShootSlope1>0.1</OverShootSlope1>
      <OverShootTemperature>0</OverShootTemperature>
      <OverShootTime>0</OverShootTime>
      <OverShootSlope2>0.1</OverShootSlope2>
      <GotoNumber>0</GotoNumber>
      <LoopNumber>0</LoopNumber>
      <PIDNumber>1</PIDNumber>
      <LidTemp>110</LidTemp>
    </Step>
    <PIDSet>
      <PID number="1">
        <PHeating>60</PHeating>
        <PCooling>80</PCooling>
        <IHeating>250</IHeating>
        <ICooling>100</ICooling>
        <DHeating>10</DHeating>
        <DCooling>10</DCooling>
        <PLid>100</PLid>
        <ILid>70</ILid>
      </PID>
    </PIDSet>
  </Method>
  <Method methodName="Keep4_8h" creator="Shan" dateTime="2026-02-20T10:00:00.0000000+08:00">
    <Variant>960000</Variant>
    <PlateType>0</PlateType>
    <FluidQuantity>0</FluidQuantity>
    <PostHeating>true</PostHeating>
    <StartBlockTemperature>4</StartBlockTemperature>
    <StartLidTemperature>25</StartLidTemperature>
    <Step>
      <Number>1</Number>
      <Slope>2</Slope>
      <PlateauTemperature>4</PlateauTemperature>
      <PlateauTime>28800</PlateauTime>
      <OverShootSlope1>0.1</OverShootSlope1>
      <OverShootTemperature>0</OverShootTemperature>
      <OverShootTime>0</OverShootTime>
      <OverShootSlope2>0.1</OverShootSlope2>
      <GotoNumber>0</GotoNumber>
      <LoopNumber>0</LoopNumber>
      <PIDNumber>1</PIDNumber>
      <LidTemp>25</LidTemp>
    </Step>
    <PIDSet>
      <PID number="1">
        <PHeating>60</PHeating>
        <PCooling>80</PCooling>
        <IHeating>250</IHeating>
        <ICooling>100</ICooling>
        <DHeating>10</DHeating>
        <DCooling>10</DCooling>
        <PLid>100</PLid>
        <ILid>70</ILid>
      </PID>
    </PIDSet>
  </Method>
  <Method methodName="25-4" creator="Shan" dateTime="2026-03-08T10:00:00.0000000+08:00">
    <Variant>960000</Variant>
    <PlateType>0</PlateType>
    <FluidQuantity>0</FluidQuantity>
    <PostHeating>true</PostHeating>
    <StartBlockTemperature>25</StartBlockTemperature>
    <StartLidTemperature>110</StartLidTemperature>
    <Step>
      <Number>1</Number>
      <Slope>2</Slope>
      <PlateauTemperature>4</PlateauTemperature>
      <PlateauTime>5</PlateauTime>
      <OverShootSlope1>0.1</OverShootSlope1>
      <OverShootTemperature>0</OverShootTemperature>
      <OverShootTime>0</OverShootTime>
      <OverShootSlope2>0.1</OverShootSlope2>
      <GotoNumber>0</GotoNumber>
      <LoopNumber>0</LoopNumber>
      <PIDNumber>1</PIDNumber>
      <LidTemp>110</LidTemp>
    </Step>
    <PIDSet>
      <PID number="1">
        <PHeating>60</PHeating>
        <PCooling>80</PCooling>
        <IHeating>250</IHeating>
        <ICooling>100</ICooling>
        <DHeating>10</DHeating>
        <DCooling>10</DCooling>
        <PLid>100</PLid>
        <ILid>70</ILid>
      </PID>
    </PIDSet>
  </Method>
</MethodSet>
